'CR350 Program for 2 SDI-12 Sensors + Tipping Bucket + ALERT2 IND/TSD
'Base OS Compatible

'=============================
'   Public Variables
'=============================
PreserveVariables
Public Modem_On As Boolean
Public TB_Scan          'Total tips
Public Precip_Tips
Public Precip_in As Float     'Rain since last scan
Public Test_Precip_Tips As Float

Public Radar_SDI_Address As String
Public Previous_Radar_GH As Float
Public Radar_GH As Float
Public Radar_Offset As Float
Public Radar_Raw As Float

Dim RadarSDI(4)



Public SDI2_Values(2)

Public BattV

Public AL2_IND As String * 256
Public Last_Sent_IND As String * 5


Public Calibrate_SDI As Boolean
Public Force_Measurement As Boolean
Public Force_ALERT2 As Boolean
Public Test_RS232 As Boolean
Public Test_Alert As Boolean
Public Test_Count As Long
Public Scanning_On As Boolean

Dim dt(9) As Long
Dim Precip_Flag As Boolean
Dim Radar_Flag As Boolean
Dim Bubbler_Flag As Boolean
Dim TimeStampVal As String * 100
Dim Tip_Timestamps(61) As Long


'Debug Varubles

Public Report_Debug As Float


'=============================
'   Constants
'=============================
Const TB_Tip_in = 0.01
Const Site_Lat = 36.1596948
Const Site_Lon = -115.0452761
Const Site_Elevation = 527 '1730 ft to m

'ALERT2 Constants
Const ALERT2_BAUD = 57600
Const ALERT2_COM = Com2
Const StationID = 30235
Const TestStationID = 30299
Const PrecipID = "00"
Const RadarID = "07"
Const BatteryID = "08"
Const GPSID = "10"
Const BubblerID = "09"

Const AL2_Prefix = "414C323262"

'=============================
'   Data Tables
'=============================
DataTable(FiveMinuteData,True,129600)
    DataInterval(0,5,Min,10)
    Totalize(1,Precip_in,FP2,False)
    FieldNames("Precip")
    Sample(1,Radar_GH,FP2)
    FieldNames("Gage_Height_Radar")
    Sample(1,SDI2_Values(),FP2)
    FieldNames("Gage_Height_Bubbler")
    Sample(1,BattV,FP2)
    FieldNames("Battery")
    MQTTPublishTable(1, 0, 15, Min, 2, Site_Lon, Site_Lat, Site_Elevation)
EndTable

DataTable(OneMinute,True,129600) '90 Days of Data
  DataInterval(0,1,Min,10)
  Totalize(1, Precip_in,FP2,False)
  Sample(1,Radar_GH,FP2)
  Sample(1,SDI2_Values(),FP2)
  Sample(1,BattV,FP2)
EndTable

DataTable(ALERT2_Table, True, 129600)
  Sample(1, AL2_IND, String)
  Sample(1, Last_Sent_IND, String)
  Totalize(1, Precip_in,FP2,False)
  Sample(1,Radar_GH,FP2)
  Sample(1,SDI2_Values(),FP2)
  Sample(1,BattV,FP2)
EndTable

'=============================
'   Included Modules
'=============================
Include "Helpers.CRB"
Include "ALERT2_Protocol.CRB"

'=============================
'   Subroutines
'=============================
Sub Record_Tip_Time
  RealTime(dt())
  TimeStampVal = dt(1) & "-" & dt(2) & "-" & dt(3) & " " & dt(4) & ":" & dt(5) & ":" & dt(6)
  Tip_Timestamps(dt(6))  = SecsSince1990(TimeStampVal, 4)
EndSub

Function BuildSensorData() As String * 256
  'Returns the type-01 sensor payload for a timed IND.
  'Add, remove, or reorder SensorReport() calls here to change the sensor set.
  Dim data As String * 256
  data = SensorReport(PrecipID,  Round(Precip_Tips, 0),         "1")
  data = data & SensorReport(RadarID,   Round(Radar_GH * 100, 0),     "1")
  data = data & SensorReport(BubblerID, Round(SDI2_Values(1) * 100, 0), "1")
  data = data & SensorReport(BatteryID, Round(BattV * 100, 0),         "1")
  BuildSensorData = data
EndFunction

Sub Clear_Tip_Time
  Dim i As Long
  For i = 1 To 60
    Tip_Timestamps(i) = 0
  Next i
EndSub

Sub Read_Radar
  If Calibrate_SDI
    'Calibrate Radar'
    SDI12Recorder(RadarSDI(),1,Radar_SDI_Address,"M!",1.0,0)
    Radar_Offset = Radar_GH - RadarSDI(2)
    Calibrate_SDI = False
  EndIf

  SDI12Recorder(RadarSDI(),1,Radar_SDI_Address,"M!",1.0,0)
  Radar_Raw = RadarSDI(1)
  Radar_GH = Radar_Offset + Radar_Raw
  Previous_Radar_GH = Radar_GH
EndSub

'=============================
'   Begin Program
'=============================
BeginProg
    Test_RS232 = False
    Scanning_On = True
    Modem_On = True
    Radar_SDI_Address = "0"

    SerialOpen(ALERT2_COM, ALERT2_BAUD, 0, 0, 100)
    'Tipping bucket scan every second
    Scan (30,Sec,0,0)
      PulseCount (TB_Scan,1,P_SW,2,0,1.0,0)
      If TB_Scan > 0 Then
        Precip_Flag = True 'Will Send a ALERT2 Event Transmit
        If Test_Alert
          Test_Precip_Tips += TB_Scan
        Else
          Precip_Tips += TB_Scan
          Precip_in = Precip_Tips * TB_Tip_in
        EndIf
        'Call Record_Tip_Time
      EndIf

      If Force_Measurement OR Calibrate_SDI
        Call Read_Radar
        'TimeOffset = NetworkTimeProtocol("time.google.com",-1,1000)


        Force_Measurement = False
      EndIf
    NextScan


    'SDI-12 scan every minute
    SlowSequence
      Scan (60, Sec, 0, 0)
        Battery(BattV)
        'Read Radar'
        Call Read_Radar
        'Placeholder for bubbler'
        If Modem_On
          SW12 (SW12_1,1)
        Else
          SW12(SW12_1,0)
        EndIf

        If ABS(Radar_GH - Previous_Radar_GH) > 0.015
          Radar_Flag = True
          Previous_Radar_GH = Radar_GH
        Else
          Previous_Radar_GH = Radar_GH
        EndIf

        'Read Bubbler
        SDI12Recorder(SDI2_Values(),1,"1","M!",1.0,0)

        CallTable(OneMinute)

        If Precip_Flag OR Radar_Flag OR Bubbler_Flag
          'Build event sensor data only for sensors whose flag is set
          Dim EventData As String * 256
          EventData = ""
          If Radar_Flag
            EventData = EventData & SensorReport(RadarID,   Round(Radar_GH * 100, 0),       "1")
          EndIf
          If Bubbler_Flag
            EventData = EventData & SensorReport(BubblerID, Round(SDI2_Values(1) * 100, 0), "1")
          EndIf
          'Call Send_Event_IND(EventData)
          Call Send_Timed_IND(BuildSensorData())
          Precip_Flag = False
          Radar_Flag = False
          Bubbler_Flag = False
        EndIf

      'Prevents the test channel from being used for more than 1 hour
        If Test_Alert
          Test_Count += 1
        EndIf
        If Test_Count > 60
          Test_Alert = False
          Test_Count = 0
        EndIf

      'Hourly Alert2
      If TimeIntoInterval(0,60,Min) Then
          Call Send_Timed_IND(BuildSensorData())
      EndIf
      If TimeIntoInterval(0, 5, Min) Then
        CallTable(FiveMinuteData)
      EndIf

      If Force_ALERT2
        Call Send_Timed_IND(BuildSensorData())
        Force_ALERT2 = False
      EndIf
    NextScan

EndProg
